PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Dots Experiment
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent welcomeText
      letterHeight = .05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click the screen to start
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Stimulus
    MouseComponent nextScreen
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent Tracker
      fillColor = 0.1216, 0.4745, 0.1216
      pos = (.75, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent Square3
      fillColor = white
      pos = (-.1, 0)
      saveStartStop = False
      shape = rectangle
      size = (.6, .7)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle1
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, .2)
      saveStartStop = False
      shape = circle
      size = (.1,.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, .2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, .2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle4
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle5
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle6
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle7
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle8
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle9
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle10
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle11
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle12
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle13
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle14
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle15
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle16
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle17
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle18
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle19
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle20
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        correct_number = 0

        # Define the square size and margin
        square_width = 0.6
        square_height = 0.7
        margin = 0.05

        # Define the dot size
        dot_size = .05

        # Calculate the adjusted square size
        adjusted_width = square_width -  2 * margin
        adjusted_height = square_height - 2 * margin

        # Calculate the number of rows and columns
        num_rows = 5
        num_columns = 6

        # Calculate the horizontal and vertical intervals
        horizontal_interval = adjusted_width / (num_columns)
        vertical_interval = adjusted_height / (num_rows)

        # Create a list to store dot positions
        dot_positions = []

        # Generate dot positions within the square
        for row in range(num_rows):
            for col in range(num_columns):
                x = (-adjusted_width / 2  + margin + (col) * horizontal_interval) -.1
                y = -adjusted_height / 2 + margin +(row) * vertical_interval
                dot_positions.append((x, y))
      Begin Experiment:
        #sound counter initialize
        sound_item = -1

        #point counter initialize
        points = 0

        #correct counter initialize
        correct_total = 0
      Begin Routine:
        import random
        correct_number = random.randint(1, 30)
        circles = []
        circles_obj = [Circle1, Circle2, Circle3, Circle4, Circle5, Circle6, Circle7, Circle8, Circle9, Circle10, Circle11, Circle12, Circle13, Circle14, Circle15, Circle16, Circle17, Circle18, Circle19, Circle20, Circle21, Circle22, Circle23, Circle24, Circle25, Circle26, Circle27, Circle28, Circle29, Circle30]

        for i in range(0, len(circles_stim)):
            circles.append(circles_obj[i])

        stimuli_circles = []

        for i in range(len(circles)):
            circles[i].pos = dot_positions[i]

        for _ in range(correct_number):
            selected_dot = random.randint(0,len(circles)-1)
            selected_circle = circles.pop(selected_dot)
            stimuli_circles.append(selected_circle)

        for i in range(0, len(stimuli_circles)):
            adjust_x = random.uniform(-.03, .03)
            adjust_y = random.uniform(-.03, .03)
            stimuli_circles[i].pos += (adjust_x, adjust_y)
            stimuli_circles[i].size = .05
            stimuli_circles[i].opacity = 1
      Each Frame:
        #calculates how many cookies to show
        if points == 1:
           imageCookie1.opacity = 1
        elif points == 2:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
        elif points == 3:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
        elif points == 4:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
           imageCookie4.opacity = 1
        elif points == 5:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
           imageCookie4.opacity = 1
           imageCookie5.opacity = 1
        elif points == 6:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
           imageCookie4.opacity = 1
           imageCookie5.opacity = 1
           imageCookie6.opacity = 1
        elif points == 7:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
           imageCookie4.opacity = 1
           imageCookie5.opacity = 1
           imageCookie6.opacity = 1
           imageCookie7.opacity = 1
        elif points == 8:
           imageCookie1.opacity = 1
           imageCookie2.opacity = 1
           imageCookie3.opacity = 1
           imageCookie4.opacity = 1
           imageCookie5.opacity = 1
           imageCookie6.opacity = 1
           imageCookie7.opacity = 1
           imageCookie8.opacity = 1
    TextComponent Points
      letterHeight = 0.05
      pos = (.75, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points
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    ImageComponent imageCookie1
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.34)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.24)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie3
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.14)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie4
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.04)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie5
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, 0.06)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie6
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .16)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie7
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .26)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie8
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .36)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Response
    PolygonComponent Square1
      fillColor = white
      pos = (-.45, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent Square2
      fillColor = white
      pos = (.25, 0)
      saveStartStop = False
      shape = rectangle
      size = (.6, .7)
      startVal [time (s)] = 0.0
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    MouseComponent nextScreen_3
      clickable = Square1, Square2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent Tracker_2
      fillColor = 0.1216, 0.4745, 0.1216
      pos = (0.75, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle1_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, .2)
      saveStartStop = False
      shape = circle
      size = (.1,.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle2_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, .2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle3_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, .2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle4_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle5_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle6_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle7_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle8_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle9_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle10_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle11_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle12_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle13_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle14_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle15_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle16_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle17_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle18_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle19_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle20_2
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (.1, -.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle1_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-.3, .2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle2_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-0.1,0.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle3_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (0.1, 0.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle4_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-0.3, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle5_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-0.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle6_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (0.1, 0)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle7_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-0.3, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle8_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (-0.1, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle9_3
      fillColor = 0.7255, -0.8431, -0.5294
      opacity [set every repeat] = 0
      pos = (0.1, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import sound
      Begin Routine:
        import random
        incorrect_number = random.randint(1, 30)
        circles_2 = []
        circles_3 = []
        circles_2obj = [Circle1_2, Circle2_2, Circle3_2, Circle4_2, Circle5_2, Circle6_2, Circle7_2, Circle8_2, Circle9_2, Circle10_2, Circle11_2, Circle12_2, Circle13_2, Circle14_2, Circle15_2, Circle16_2, Circle17_2, Circle18_2, Circle19_2, Circle20_2, Circle21_2, Circle22_2, Circle23_2, Circle24_2, Circle25_2, Circle26_2, Circle27_2, Circle28_2, Circle29_2, Circle30_2]
        circles_3obj = [Circle1_3, Circle2_3, Circle3_3, Circle4_3, Circle5_3, Circle6_3, Circle7_3, Circle8_3, Circle9_3, Circle10_3, Circle11_3, Circle12_3, Circle13_3, Circle14_3, Circle15_3, Circle16_3, Circle17_3, Circle18_3, Circle19_3, Circle20_3, Circle21_3, Circle22_3, Circle23_3, Circle24_3, Circle25_3, Circle26_3, Circle27_3, Circle28_3, Circle29_3, Circle30_3]
        match_circles = []
        incorrect_circles = []

        for i in range(0, len(circles_correct)):
            circles_2.append(circles_2obj[i])

        for i in range(0, len(circles_correct)):
            circles_3.append(circles_3obj[i])

        for i in range(len(circles_2)):
            circles_2[i].pos = dot_positions[i]
            circles_3[i].pos = dot_positions[i]

        for _ in range(correct_number):
            selected_dot = random.randint(0,len(circles_2)-1)
            selected_circle = circles_2.pop(selected_dot)
            match_circles.append(selected_circle)

        side_condition = random.randint(0,1)
        if(side_condition == 1):
            correct_image = Square1
        else:
            correct_image = Square2

        for i in range(0, len(match_circles)):
            adjust_x = random.uniform(-.03, .03)
            adjust_y = random.uniform(-.03, .03)
            match_circles[i].pos += (adjust_x, adjust_y)
            if(side_condition == 1):
                match_circles[i].pos += (-.35, 0)
            else:
                match_circles[i].pos += (.35, 0)
            match_circles[i].size = .05
            match_circles[i].opacity = 1

        if (incorrect_number == correct_number and incorrect_number != 9):
            incorrect_number += 1
        elif (incorrect_number == correct_number and incorrect_number == 9):
            incorrect_number -= 1

        for _ in range(incorrect_number):
            selected_dot3 = random.randint(0,len(circles_3)-1)
            selected_circle3 = circles_3.pop(selected_dot3)
            incorrect_circles.append(selected_circle3)

        for i in range(0, len(incorrect_circles)):
            adjust_x2 = random.uniform(-.03, .03)
            adjust_y2 = random.uniform(-.03, .03)
            incorrect_circles[i].pos += (adjust_x2, adjust_y2)
            if(side_condition == 1):
                incorrect_circles[i].pos += (.35, 0)
            else:
                incorrect_circles[i].pos += (-.35, 0)
            incorrect_circles[i].size = .05
            incorrect_circles[i].opacity = 1

        #increments sound counter by 1
        if sound_item < 7:
            sound_item +=1

        #reshuffles list and resets counter when list complete
        else:
            shuffle(sound_list)
            sound_item = 0

        #adds sounds to variable
        correct = sound.Sound(sound_list[sound_item])
        incorrect = sound.Sound('numbers/negative-notification.wav')


        #sends numbers to spreadsheet
        thisExp.addData('Correct Number', correct_number)
        thisExp.addData('Incorrect Number', incorrect_number)
      Each Frame:
        #calculates how many cookies to show
        if points == 1:
           imageCookie1_2.opacity = 1
        elif points == 2:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
        elif points == 3:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
        elif points == 4:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
           imageCookie4_2.opacity = 1
        elif points == 5:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
           imageCookie4_2.opacity = 1
           imageCookie5_2.opacity = 1
        elif points == 6:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
           imageCookie4_2.opacity = 1
           imageCookie5_2.opacity = 1
           imageCookie6_2.opacity = 1
        elif points == 7:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
           imageCookie4_2.opacity = 1
           imageCookie5_2.opacity = 1
           imageCookie6_2.opacity = 1
           imageCookie7_2.opacity = 1
        elif points == 8:
           imageCookie1_2.opacity = 1
           imageCookie2_2.opacity = 1
           imageCookie3_2.opacity = 1
           imageCookie4_2.opacity = 1
           imageCookie5_2.opacity = 1
           imageCookie6_2.opacity = 1
           imageCookie7_2.opacity = 1
           imageCookie8_2.opacity = 1
      End Routine:
        #adds point and plays sound if correct image is pressed
        if(nextScreen_3.isPressedIn(correct_image)):
            msg = 'Correct'
            points += 1
            correct_total += 1
            correct.play()
        else:
            msg = 'Incorrect'
            incorrect.play()


        #sends result to spreadsheet
        thisExp.addData('Result', msg)
        thisExp.addData('Total Correct', correct_total)
    TextComponent Points_2
      letterHeight = 0.05
      pos = .75, -.45
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points
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    ImageComponent imageCookie1_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.34)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie2_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.24)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie3_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.14)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie4_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, -.04)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie5_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, 0.06)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie6_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .16)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie7_2
      image = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .26)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imageCookie8_2
      image [set every repeat] = numbers/cookie.png
      opacity [set every repeat] = 0
      pos = (0.75, .36)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine RewardScreen
    TextComponent reward
      color [set every repeat] = $colors
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $affirm
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        #only displays screen when there are 8 points
        if points != 8:
            continueRoutine = False
        #resets points from 8 to 0 for next round
        else:
            points = 0
    MouseComponent nextScreen_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent End_2
      color = -1.0000, 0.6157, 0.6392
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Game Over!
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    MouseComponent nextScreen_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SoundLoader
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        #empty lists to hold stimuli
        sound_list = []
      Begin Routine:
        #saves the sounds into the list
        sound_list.append(sounds)
  Routine SoundShuffler
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #shuffles order of when images appear
        shuffle(sound_list)
  Routine CircleLoader
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        circles_stim = []
        circles_correct = []
        circles_incorrect = []
      Begin Routine:
        circles_stim.append(stimuli_circles)
        circles_correct.append(correct_circles)
        circles_incorrect.append(incorrect_circles)
Flow
  LoopInitiator LoaderLoop loopType="TrialHandler"
    conditionsFile = sounds_stim.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'affirm': 'You got it!', 'colors': 'crimson', 'sounds': 'numbers/arcade-bonus.wav'},
      {'affirm': 'On a roll!', 'colors': 'darkcyan', 'sounds': 'numbers/casino-bling.wav'},
      {'affirm': 'Nice job!', 'colors': 'orchid', 'sounds': 'numbers/arcade-bonus.wav'},
      {'affirm': 'Very good!', 'colors': 'skyblue', 'sounds': 'numbers/bonus.wav'},
      {'affirm': 'Well done!', 'colors': 'tomato', 'sounds': 'numbers/game-flute.wav'},
      {'affirm': 'Way to go!', 'colors': 'yellowgreen', 'sounds': 'numbers/casino-bling.wav'},
      {'affirm': 'Superb!', 'colors': 'gold', 'sounds': 'numbers/game-flute.wav'},
      {'affirm': 'Amazing!', 'colors': 'navajowhite', 'sounds': 'numbers/bonus.wav'}]
    Routine SoundLoader
  LoopTerminator LoaderLoop
  LoopInitiator LoaderLoop2 loopType="TrialHandler"
    conditionsFile = circles_stim.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stimuli_circles': 1, 'correct_circles': 1, 'incorrect_circles': 1},
      {'stimuli_circles': 2, 'correct_circles': 2, 'incorrect_circles': 2},
      {'stimuli_circles': 3, 'correct_circles': 3, 'incorrect_circles': 3},
      {'stimuli_circles': 4, 'correct_circles': 4, 'incorrect_circles': 4},
      {'stimuli_circles': 5, 'correct_circles': 5, 'incorrect_circles': 5},
      {'stimuli_circles': 6, 'correct_circles': 6, 'incorrect_circles': 6},
      {'stimuli_circles': 7, 'correct_circles': 7, 'incorrect_circles': 7},
      {'stimuli_circles': 8, 'correct_circles': 8, 'incorrect_circles': 8},
      {'stimuli_circles': 9, 'correct_circles': 9, 'incorrect_circles': 9},
      {'stimuli_circles': 10, 'correct_circles': 10, 'incorrect_circles': 10},
      {'stimuli_circles': 11, 'correct_circles': 11, 'incorrect_circles': 11},
      {'stimuli_circles': 12, 'correct_circles': 12, 'incorrect_circles': 12},
      {'stimuli_circles': 13, 'correct_circles': 13, 'incorrect_circles': 13},
      {'stimuli_circles': 14, 'correct_circles': 14, 'incorrect_circles': 14},
      {'stimuli_circles': 15, 'correct_circles': 15, 'incorrect_circles': 15},
      {'stimuli_circles': 16, 'correct_circles': 16, 'incorrect_circles': 16},
      {'stimuli_circles': 17, 'correct_circles': 17, 'incorrect_circles': 17},
      {'stimuli_circles': 18, 'correct_circles': 18, 'incorrect_circles': 18},
      {'stimuli_circles': 19, 'correct_circles': 19, 'incorrect_circles': 19},
      {'stimuli_circles': 20, 'correct_circles': 20, 'incorrect_circles': 20},
      {'stimuli_circles': 21, 'correct_circles': 21, 'incorrect_circles': 21}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
    Routine CircleLoader
  LoopTerminator LoaderLoop2
  Routine SoundShuffler
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sounds_stim.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'affirm': 'You got it!', 'colors': 'crimson', 'sounds': 'numbers/arcade-bonus.wav'},
      {'affirm': 'On a roll!', 'colors': 'darkcyan', 'sounds': 'numbers/casino-bling.wav'},
      {'affirm': 'Nice job!', 'colors': 'orchid', 'sounds': 'numbers/arcade-bonus.wav'},
      {'affirm': 'Very good!', 'colors': 'skyblue', 'sounds': 'numbers/bonus.wav'},
      {'affirm': 'Well done!', 'colors': 'tomato', 'sounds': 'numbers/game-flute.wav'},
      {'affirm': 'Way to go!', 'colors': 'yellowgreen', 'sounds': 'numbers/casino-bling.wav'},
      {'affirm': 'Superb!', 'colors': 'gold', 'sounds': 'numbers/game-flute.wav'},
      {'affirm': 'Amazing!', 'colors': 'navajowhite', 'sounds': 'numbers/bonus.wav'}]
    Routine Stimulus
    Routine Response
    Routine RewardScreen
  LoopTerminator trials
  Routine End
